proc celldef() {
  topol()
  subsets()
  geom()
  biophys()
  geom_nseg()
}

create filament_100000042[211]

proc topol() { local i
  for i = 1, 2 connect filament_100000042[i](0), filament_100000042(1)
  for i = 3, 4 connect filament_100000042[i](0), filament_100000042[1](1)
  for i = 5, 6 connect filament_100000042[i](0), filament_100000042[2](1)
  for i = 7, 8 connect filament_100000042[i](0), filament_100000042[3](1)
  for i = 9, 10 connect filament_100000042[i](0), filament_100000042[4](1)
  for i = 11, 12 connect filament_100000042[i](0), filament_100000042[5](1)
  for i = 13, 14 connect filament_100000042[i](0), filament_100000042[6](1)
  for i = 15, 16 connect filament_100000042[i](0), filament_100000042[7](1)
  for i = 17, 18 connect filament_100000042[i](0), filament_100000042[9](1)
  for i = 19, 21 connect filament_100000042[i](0), filament_100000042[10](1)
  for i = 22, 23 connect filament_100000042[i](0), filament_100000042[11](1)
  for i = 24, 25 connect filament_100000042[i](0), filament_100000042[15](1)
  for i = 26, 27 connect filament_100000042[i](0), filament_100000042[16](1)
  for i = 28, 30 connect filament_100000042[i](0), filament_100000042[17](1)
  for i = 31, 32 connect filament_100000042[i](0), filament_100000042[18](1)
  for i = 33, 34 connect filament_100000042[i](0), filament_100000042[22](1)
  for i = 35, 36 connect filament_100000042[i](0), filament_100000042[23](1)
  for i = 37, 38 connect filament_100000042[i](0), filament_100000042[24](1)
  for i = 39, 40 connect filament_100000042[i](0), filament_100000042[25](1)
  for i = 41, 42 connect filament_100000042[i](0), filament_100000042[26](1)
  for i = 43, 44 connect filament_100000042[i](0), filament_100000042[27](1)
  for i = 45, 46 connect filament_100000042[i](0), filament_100000042[28](1)
  for i = 47, 48 connect filament_100000042[i](0), filament_100000042[29](1)
  for i = 49, 50 connect filament_100000042[i](0), filament_100000042[30](1)
  for i = 51, 52 connect filament_100000042[i](0), filament_100000042[31](1)
  for i = 53, 54 connect filament_100000042[i](0), filament_100000042[33](1)
  for i = 55, 56 connect filament_100000042[i](0), filament_100000042[34](1)
  for i = 57, 58 connect filament_100000042[i](0), filament_100000042[35](1)
  for i = 59, 60 connect filament_100000042[i](0), filament_100000042[37](1)
  for i = 61, 62 connect filament_100000042[i](0), filament_100000042[39](1)
  for i = 63, 64 connect filament_100000042[i](0), filament_100000042[40](1)
  for i = 65, 66 connect filament_100000042[i](0), filament_100000042[42](1)
  for i = 67, 68 connect filament_100000042[i](0), filament_100000042[45](1)
  for i = 69, 70 connect filament_100000042[i](0), filament_100000042[46](1)
  for i = 71, 72 connect filament_100000042[i](0), filament_100000042[47](1)
  for i = 73, 74 connect filament_100000042[i](0), filament_100000042[51](1)
  for i = 75, 76 connect filament_100000042[i](0), filament_100000042[52](1)
  for i = 77, 78 connect filament_100000042[i](0), filament_100000042[53](1)
  for i = 79, 80 connect filament_100000042[i](0), filament_100000042[54](1)
  for i = 81, 82 connect filament_100000042[i](0), filament_100000042[56](1)
  for i = 83, 84 connect filament_100000042[i](0), filament_100000042[57](1)
  for i = 85, 86 connect filament_100000042[i](0), filament_100000042[59](1)
  for i = 87, 88 connect filament_100000042[i](0), filament_100000042[60](1)
  for i = 89, 90 connect filament_100000042[i](0), filament_100000042[61](1)
  for i = 91, 92 connect filament_100000042[i](0), filament_100000042[64](1)
  for i = 93, 94 connect filament_100000042[i](0), filament_100000042[66](1)
  for i = 95, 96 connect filament_100000042[i](0), filament_100000042[67](1)
  for i = 97, 98 connect filament_100000042[i](0), filament_100000042[71](1)
  for i = 99, 100 connect filament_100000042[i](0), filament_100000042[73](1)
  for i = 101, 102 connect filament_100000042[i](0), filament_100000042[78](1)
  for i = 103, 104 connect filament_100000042[i](0), filament_100000042[80](1)
  for i = 105, 106 connect filament_100000042[i](0), filament_100000042[81](1)
  for i = 107, 108 connect filament_100000042[i](0), filament_100000042[82](1)
  for i = 109, 110 connect filament_100000042[i](0), filament_100000042[85](1)
  for i = 111, 112 connect filament_100000042[i](0), filament_100000042[86](1)
  for i = 113, 114 connect filament_100000042[i](0), filament_100000042[89](1)
  for i = 115, 116 connect filament_100000042[i](0), filament_100000042[96](1)
  for i = 117, 118 connect filament_100000042[i](0), filament_100000042[99](1)
  for i = 119, 120 connect filament_100000042[i](0), filament_100000042[107](1)
  for i = 121, 122 connect filament_100000042[i](0), filament_100000042[108](1)
  for i = 123, 124 connect filament_100000042[i](0), filament_100000042[109](1)
  for i = 125, 126 connect filament_100000042[i](0), filament_100000042[110](1)
  for i = 127, 128 connect filament_100000042[i](0), filament_100000042[113](1)
  for i = 129, 130 connect filament_100000042[i](0), filament_100000042[122](1)
  for i = 131, 132 connect filament_100000042[i](0), filament_100000042[123](1)
  for i = 133, 134 connect filament_100000042[i](0), filament_100000042[126](1)
  for i = 135, 136 connect filament_100000042[i](0), filament_100000042[127](1)
  for i = 137, 138 connect filament_100000042[i](0), filament_100000042[131](1)
  for i = 139, 140 connect filament_100000042[i](0), filament_100000042[132](1)
  for i = 141, 142 connect filament_100000042[i](0), filament_100000042[133](1)
  for i = 143, 144 connect filament_100000042[i](0), filament_100000042[137](1)
  for i = 145, 146 connect filament_100000042[i](0), filament_100000042[143](1)
  for i = 147, 148 connect filament_100000042[i](0), filament_100000042[144](1)
  for i = 149, 150 connect filament_100000042[i](0), filament_100000042[145](1)
  for i = 151, 152 connect filament_100000042[i](0), filament_100000042[146](1)
  for i = 153, 154 connect filament_100000042[i](0), filament_100000042[148](1)
  for i = 155, 156 connect filament_100000042[i](0), filament_100000042[149](1)
  for i = 157, 158 connect filament_100000042[i](0), filament_100000042[150](1)
  for i = 159, 160 connect filament_100000042[i](0), filament_100000042[151](1)
  for i = 161, 162 connect filament_100000042[i](0), filament_100000042[153](1)
  for i = 163, 164 connect filament_100000042[i](0), filament_100000042[155](1)
  for i = 165, 166 connect filament_100000042[i](0), filament_100000042[159](1)
  for i = 167, 168 connect filament_100000042[i](0), filament_100000042[160](1)
  for i = 169, 170 connect filament_100000042[i](0), filament_100000042[163](1)
  for i = 171, 172 connect filament_100000042[i](0), filament_100000042[164](1)
  for i = 173, 174 connect filament_100000042[i](0), filament_100000042[165](1)
  for i = 175, 176 connect filament_100000042[i](0), filament_100000042[166](1)
  for i = 177, 178 connect filament_100000042[i](0), filament_100000042[169](1)
  for i = 179, 180 connect filament_100000042[i](0), filament_100000042[170](1)
  for i = 181, 182 connect filament_100000042[i](0), filament_100000042[171](1)
  for i = 183, 184 connect filament_100000042[i](0), filament_100000042[172](1)
  for i = 185, 186 connect filament_100000042[i](0), filament_100000042[173](1)
  for i = 187, 188 connect filament_100000042[i](0), filament_100000042[174](1)
  for i = 189, 190 connect filament_100000042[i](0), filament_100000042[176](1)
  for i = 191, 192 connect filament_100000042[i](0), filament_100000042[178](1)
  for i = 193, 194 connect filament_100000042[i](0), filament_100000042[181](1)
  for i = 195, 196 connect filament_100000042[i](0), filament_100000042[182](1)
  for i = 197, 198 connect filament_100000042[i](0), filament_100000042[183](1)
  for i = 199, 200 connect filament_100000042[i](0), filament_100000042[185](1)
  for i = 201, 202 connect filament_100000042[i](0), filament_100000042[186](1)
  for i = 203, 204 connect filament_100000042[i](0), filament_100000042[191](1)
  for i = 205, 206 connect filament_100000042[i](0), filament_100000042[200](1)
  for i = 207, 208 connect filament_100000042[i](0), filament_100000042[205](1)
  for i = 209, 210 connect filament_100000042[i](0), filament_100000042[208](1)
  basic_shape()
}
proc shape3d_1() {
  filament_100000042 {pt3dclear()
	pt3dadd(552.703, 988.659, 129.291, 4.79842)
	pt3dadd(552.615, 988.24, 128.971, 5.52792)
  }
  filament_100000042[1] {pt3dclear()
	pt3dadd(552.615, 988.24, 128.971, 5.52792)
	pt3dadd(552.601, 987.718, 128.617, 6.05773)
  }
  filament_100000042[2] {pt3dclear()
	pt3dadd(552.615, 988.24, 128.971, 5.52792)
	pt3dadd(551.949, 988.519, 128.689, 6.04366)
  }
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  }
}
proc shape3d_2() {
  filament_100000042[12] {	pt3dadd(538.101, 991.523, 129.556, 0.5)
	pt3dadd(537.576, 991.544, 129.765, 0.504797)
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  }
}
proc shape3d_3() {
  filament_100000042[14] {	pt3dadd(552.731, 996.019, 128.159, 6.27135)
	pt3dadd(552.595, 996.519, 127.694, 6.37587)
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  }
}
proc shape3d_4() {
  filament_100000042[19] {	pt3dadd(552.457, 983.162, 125.165, 6.09618)
	pt3dadd(552.619, 982.635, 124.974, 5.08418)
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  }
}
proc shape3d_5() {
  filament_100000042[25] {	pt3dadd(573.779, 934.322, 125.667, 1.03783)
	pt3dadd(574.254, 934.33, 125.696, 1.04279)
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  }
}
proc shape3d_6() {
  filament_100000042[27] {	pt3dadd(448.539, 918.708, 137.067, 1.07791)
	pt3dadd(448.104, 918.455, 137.129, 1.20276)
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  }
}
proc shape3d_7() {
  filament_100000042[30] {	pt3dadd(586.029, 1013.88, 109.042, 1.02674)
	pt3dadd(585.938, 1014.41, 108.857, 0.950913)
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  }
}
proc shape3d_8() {
  filament_100000042[35] {	pt3dadd(497.78, 1009.56, 124.038, 1.42449)
	pt3dadd(497.252, 1009.52, 124.017, 1.20916)
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  }
}
proc shape3d_9() {
  filament_100000042[36] {	pt3dadd(451.706, 1087.8, 135.987, 0.715699)
	pt3dadd(451.611, 1088.31, 136.116, 0.604159)
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  }
}
proc shape3d_10() {
  filament_100000042[39] {	pt3dadd(659.21, 917.215, 128.24, 1.61857)
	pt3dadd(659.706, 917.082, 128.295, 1.80899)
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  }
}
proc shape3d_11() {
  filament_100000042[45] {	pt3dadd(655.424, 1135.5, 97.2914, 1.38577)
	pt3dadd(655.328, 1135.99, 97.1387, 1.39047)
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  }
}
proc shape3d_12() {
  filament_100000042[48] {	pt3dadd(588.749, 998.933, 105.584, 0.625637)
	pt3dadd(589.159, 998.565, 105.376, 0.841971)
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  }
}
proc shape3d_13() {
  filament_100000042[49] {	pt3dadd(608.407, 1065.11, 88.0505, 1.05921)
	pt3dadd(608.557, 1065.61, 88.0448, 0.877203)
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  }
}
proc shape3d_14() {
  filament_100000042[49] {	pt3dadd(627.22, 1156.44, 68.9328, 0.922763)
	pt3dadd(627.348, 1156.91, 68.7618, 1.0144)
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  }
}
proc shape3d_15() {
  filament_100000042[50] {	pt3dadd(589.468, 1032.63, 93.1939, 1.91774)
	pt3dadd(589.458, 1033.11, 92.83, 1.69781)
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  }
}
proc shape3d_16() {
  filament_100000042[50] {	pt3dadd(605.672, 1118.08, 41.2129, 1.07946)
	pt3dadd(605.78, 1118.62, 41.0327, 1.09465)
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  }
}
proc shape3d_17() {
  filament_100000042[52] {	pt3dadd(657.087, 1080.43, 126.937, 1.17706)
	pt3dadd(657.439, 1080.82, 126.859, 1.25918)
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  }
}
proc shape3d_18() {
  filament_100000042[55] {	pt3dadd(488.995, 983.604, 108.459, 1.12642)
	pt3dadd(488.484, 983.391, 108.379, 1.01867)
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  }
}
proc shape3d_19() {
  filament_100000042[55] {	pt3dadd(401.372, 936.183, 94.5484, 0.690601)
	pt3dadd(401.034, 935.794, 94.4233, 0.688122)
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  }
}
proc shape3d_20() {
  filament_100000042[55] {	pt3dadd(314.031, 886.886, 79.678, 1.28713)
	pt3dadd(313.713, 886.503, 79.7526, 1.31815)
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  }
}
proc shape3d_21() {
  filament_100000042[58] {	pt3dadd(448.449, 984.859, 124.225, 0.843248)
	pt3dadd(447.994, 984.65, 124.208, 0.887765)
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  }
}
proc shape3d_22() {
  filament_100000042[58] {	pt3dadd(373.071, 917.013, 120.287, 0.850925)
	pt3dadd(372.856, 916.537, 120.328, 0.934564)
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  }
}
proc shape3d_23() {
  filament_100000042[60] {	pt3dadd(548.721, 912.355, 124.38, 1.03331)
	pt3dadd(549.001, 912.065, 123.882, 1.396)
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  }
}
proc shape3d_24() {
  filament_100000042[62] {	pt3dadd(678.969, 884.09, 134.116, 1.37174)
	pt3dadd(679.303, 883.692, 134.23, 1.3498)
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  }
}
proc shape3d_25() {
  filament_100000042[65] {	pt3dadd(450.551, 895.372, 125.278, 0.615765)
	pt3dadd(450.12, 895.043, 125.276, 0.53554)
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  }
}
proc shape3d_26() {
  filament_100000042[65] {	pt3dadd(361.686, 852.622, 119.145, 0.910418)
	pt3dadd(361.177, 852.451, 119.108, 0.988167)
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  }
}
proc shape3d_27() {
  filament_100000042[65] {	pt3dadd(277.03, 799.275, 111.024, 0.725302)
	pt3dadd(276.532, 799.13, 110.98, 0.633676)
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  }
}
proc shape3d_28() {
  filament_100000042[69] {	pt3dadd(629.856, 1111.98, 80.2606, 0.5)
	pt3dadd(629.819, 1112.5, 80.27, 0.586491)
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  }
}
proc shape3d_29() {
  filament_100000042[69] {	pt3dadd(657.167, 1205.06, 72.5431, 1.08771)
	pt3dadd(657.583, 1205.43, 72.4684, 0.975953)
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  }
}
proc shape3d_30() {
  filament_100000042[70] {	pt3dadd(716.06, 1112.31, 59.1404, 0.963982)
	pt3dadd(716.559, 1112.38, 58.9331, 0.975994)
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  }
}
proc shape3d_31() {
  filament_100000042[72] {	pt3dadd(623.599, 1012.68, 115.505, 0.957656)
	pt3dadd(624.162, 1012.75, 115.393, 0.98397)
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  }
}
proc shape3d_32() {
  filament_100000042[72] {	pt3dadd(720.626, 1028.78, 115.304, 0.859866)
	pt3dadd(721.128, 1028.74, 115.3, 0.978105)
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  }
}
proc shape3d_33() {
  filament_100000042[72] {	pt3dadd(820.628, 1030.99, 114.249, 1.15113)
	pt3dadd(821.072, 1030.79, 114.281, 0.942497)
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  }
}
proc shape3d_34() {
  filament_100000042[73] {	pt3dadd(669.244, 1002.42, 122.628, 1.14342)
	pt3dadd(669.738, 1002.33, 122.613, 1.56352)
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  }
}
proc shape3d_35() {
  filament_100000042[74] {	pt3dadd(700.296, 1016.53, 98.6126, 0.945677)
	pt3dadd(700.803, 1016.41, 98.5537, 0.886285)
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  }
}
proc shape3d_36() {
  filament_100000042[74] {	pt3dadd(797.082, 1031.86, 82.2747, 0.669063)
	pt3dadd(797.543, 1032.07, 82.2453, 0.575905)
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  }
}
proc shape3d_37() {
  filament_100000042[75] {	pt3dadd(745.179, 1153.35, 125.364, 1.66955)
	pt3dadd(745.519, 1153.71, 125.251, 1.55813)
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  }
}
proc shape3d_38() {
  filament_100000042[75] {	pt3dadd(816.966, 1223.92, 120.415, 0.868377)
	pt3dadd(817.363, 1224.21, 120.458, 0.838675)
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  }
}
proc shape3d_39() {
  filament_100000042[77] {	pt3dadd(450.447, 1015.08, 104.378, 0.906953)
	pt3dadd(449.98, 1014.9, 104.387, 0.975732)
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  }
}
proc shape3d_40() {
  filament_100000042[77] {	pt3dadd(351.985, 1023.4, 92.9397, 0.995616)
	pt3dadd(351.53, 1023.53, 92.6851, 1.12109)
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  }
}
proc shape3d_41() {
  filament_100000042[77] {	pt3dadd(253.628, 1010.64, 83.0867, 0.82034)
	pt3dadd(253.172, 1010.58, 82.9364, 0.911208)
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  }
}
proc shape3d_42() {
  filament_100000042[78] {	pt3dadd(436.345, 1074.21, 98.1746, 0.854241)
	pt3dadd(435.851, 1074.36, 98.2089, 1.06323)
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  }
}
proc shape3d_43() {
  filament_100000042[81] {	pt3dadd(510.207, 1008.96, 104.748, 2.11582)
	pt3dadd(509.997, 1009.3, 104.381, 1.83157)
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  }
}
proc shape3d_44() {
  filament_100000042[83] {	pt3dadd(418.789, 1027.77, 117.126, 0.950946)
	pt3dadd(418.298, 1027.78, 117.228, 0.95543)
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  }
}
proc shape3d_45() {
  filament_100000042[83] {	pt3dadd(318.745, 1029.04, 117.005, 1.01037)
	pt3dadd(318.269, 1028.96, 116.933, 0.978662)
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  }
}
proc shape3d_46() {
  filament_100000042[83] {	pt3dadd(219.189, 1040.64, 113.419, 0.964482)
	pt3dadd(218.693, 1040.81, 113.466, 0.907901)
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  }
}
proc shape3d_47() {
  filament_100000042[86] {	pt3dadd(494.528, 852.035, 133.401, 1.15613)
	pt3dadd(494.092, 851.755, 133.444, 1.13785)
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  }
}
proc shape3d_48() {
  filament_100000042[87] {	pt3dadd(662.345, 831.38, 75.4712, 1.04177)
	pt3dadd(662.826, 831.226, 75.4948, 1.01785)
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  }
}
proc shape3d_49() {
  filament_100000042[88] {	pt3dadd(618.57, 844.245, 76.5689, 1.26958)
	pt3dadd(618.719, 843.73, 76.4881, 1.02799)
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  }
}
proc shape3d_50() {
  filament_100000042[89] {	pt3dadd(705.733, 892.704, 129.083, 0.857776)
	pt3dadd(706.256, 892.691, 129.031, 0.849496)
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  }
}
proc shape3d_51() {
  filament_100000042[95] {	pt3dadd(672.808, 1169.36, 90.0482, 1.4132)
	pt3dadd(672.977, 1169.88, 89.9928, 1.27094)
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  }
}
proc shape3d_52() {
  filament_100000042[95] {	pt3dadd(726.939, 1253.72, 83.2487, 0.889646)
	pt3dadd(727.081, 1254.21, 83.2956, 0.848996)
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  }
}
proc shape3d_53() {
  filament_100000042[97] {	pt3dadd(654.15, 1045.62, 101.398, 0.831055)
	pt3dadd(654.546, 1046, 101.311, 0.866381)
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  }
}
proc shape3d_54() {
  filament_100000042[97] {	pt3dadd(728.658, 1112.81, 99.2529, 1.26417)
	pt3dadd(729.071, 1113.09, 99.2191, 1.25646)
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  }
}
proc shape3d_55() {
  filament_100000042[97] {	pt3dadd(809.698, 1173.82, 91.3827, 0.840937)
	pt3dadd(810.133, 1174.09, 91.3697, 0.806146)
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  }
}
proc shape3d_56() {
  filament_100000042[98] {	pt3dadd(690.057, 1073.03, 81.4384, 1.16721)
	pt3dadd(690.336, 1073.4, 81.1302, 1.51538)
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  }
}
proc shape3d_57() {
  filament_100000042[98] {	pt3dadd(776.164, 1108.32, 45.8014, 0.5)
	pt3dadd(776.497, 1107.98, 45.8822, 0.5)
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  }
}
proc shape3d_58() {
  filament_100000042[99] {	pt3dadd(777.734, 981.543, 118.88, 1.04511)
	pt3dadd(778.218, 981.478, 119.154, 0.965254)
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  }
}
proc shape3d_59() {
  filament_100000042[99] {	pt3dadd(879.052, 985.389, 119.227, 0.779103)
	pt3dadd(879.547, 985.544, 119.147, 0.850205)
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  }
}
proc shape3d_60() {
  filament_100000042[100] {	pt3dadd(776.284, 982.098, 135.171, 0.938232)
	pt3dadd(776.721, 981.677, 135.29, 1.1502)
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  }
}
proc shape3d_61() {
  filament_100000042[104] {	pt3dadd(574.524, 1041.2, 81.9607, 1.3289)
	pt3dadd(575.008, 1041.33, 81.6221, 1.46383)
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  }
}
proc shape3d_62() {
  filament_100000042[105] {	pt3dadd(468.955, 1095.91, 50.8045, 0.613529)
	pt3dadd(468.863, 1096.38, 50.5673, 0.84132)
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  }
}
proc shape3d_63() {
  filament_100000042[107] {	pt3dadd(528.461, 1010.12, 85.2028, 1.73634)
	pt3dadd(528.805, 1010.33, 84.7721, 1.3596)
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  }
}
proc shape3d_64() {
  filament_100000042[109] {	pt3dadd(526.995, 871.382, 125.932, 2.05736)
	pt3dadd(526.757, 870.931, 125.82, 2.1184)
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  }
}
proc shape3d_65() {
  filament_100000042[113] {	pt3dadd(767.51, 880.979, 132.765, 0.697993)
	pt3dadd(768.023, 880.84, 132.763, 0.851772)
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  }
}
proc shape3d_66() {
  filament_100000042[118] {	pt3dadd(890.489, 989.077, 118.153, 0.859328)
	pt3dadd(890.949, 989.307, 118.021, 0.959315)
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  }
}
proc shape3d_67() {
  filament_100000042[122] {	pt3dadd(620.648, 1049.32, 41.2456, 0.718793)
	pt3dadd(621.146, 1049.56, 41.1194, 0.649839)
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  }
}
proc shape3d_68() {
  filament_100000042[124] {	pt3dadd(587.663, 821.654, 118.515, 1.28446)
	pt3dadd(588.105, 821.398, 118.478, 1.32542)
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  }
}
proc shape3d_69() {
  filament_100000042[124] {	pt3dadd(659.131, 757.045, 117.841, 1.08817)
	pt3dadd(659.547, 756.724, 117.764, 0.908164)
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  }
}
proc shape3d_70() {
  filament_100000042[127] {	pt3dadd(810.31, 850.326, 135.554, 1.19901)
	pt3dadd(810.731, 850.02, 135.593, 1.10577)
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  }
}
proc shape3d_71() {
  filament_100000042[132] {	pt3dadd(499.881, 827.142, 95.9194, 2.55252)
	pt3dadd(499.88, 826.8, 95.3831, 2.72597)
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  }
}
proc shape3d_72() {
  filament_100000042[133] {	pt3dadd(583.67, 787.863, 132.943, 1.33484)
	pt3dadd(583.944, 787.424, 132.879, 0.914745)
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  }
}
proc shape3d_73() {
  filament_100000042[135] {	pt3dadd(814.239, 848.265, 135.439, 0.955903)
	pt3dadd(814.448, 848.219, 134.686, 1.01753)
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  }
}
proc shape3d_74() {
  filament_100000042[138] {	pt3dadd(473.613, 766.484, 126.045, 1.0664)
	pt3dadd(473.202, 766.169, 126.022, 1.07663)
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  }
}
proc shape3d_75() {
  filament_100000042[140] {	pt3dadd(446.289, 774.198, 65.9124, 0.992911)
	pt3dadd(446.218, 773.798, 65.8143, 1.1818)
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  }
}
proc shape3d_76() {
  filament_100000042[144] {	pt3dadd(482.586, 767.476, 107.75, 1.01243)
	pt3dadd(482.358, 767.022, 107.539, 1.16773)
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  }
}
proc shape3d_77() {
  filament_100000042[146] {	pt3dadd(473.189, 721.303, 121.537, 2.08502)
	pt3dadd(472.84, 720.962, 121.741, 1.99634)
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  }
}
proc shape3d_78() {
  filament_100000042[150] {	pt3dadd(548.607, 722.758, 118.364, 1.23846)
	pt3dadd(548.869, 722.293, 118.383, 1.59191)
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  }
}
proc shape3d_79() {
  filament_100000042[153] {	pt3dadd(452.501, 685.6, 83.7303, 0.895374)
	pt3dadd(452.546, 685.122, 83.5305, 1.19643)
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  }
}
proc shape3d_80() {
  filament_100000042[157] {	pt3dadd(592.049, 708.82, 121.67, 0.961438)
	pt3dadd(592.416, 708.386, 121.654, 1.10787)
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  }
}
proc shape3d_81() {
  filament_100000042[157] {	pt3dadd(676.147, 659.048, 125.12, 0.906646)
	pt3dadd(676.528, 658.7, 125.103, 1.16938)
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  }
}
proc shape3d_82() {
  filament_100000042[160] {	pt3dadd(443.2, 694.134, 124.184, 1.02683)
	pt3dadd(442.792, 693.82, 124.207, 1.15321)
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  }
}
proc shape3d_83() {
  filament_100000042[163] {	pt3dadd(527.855, 682.124, 103.151, 1.85127)
	pt3dadd(528.114, 681.68, 103.157, 1.66385)
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  }
}
proc shape3d_84() {
  filament_100000042[164] {	pt3dadd(464.991, 654.336, 112.089, 2.22442)
	pt3dadd(464.806, 653.852, 112.041, 2.22657)
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  }
}
proc shape3d_85() {
  filament_100000042[164] {	pt3dadd(447.799, 554.188, 106.522, 1.96232)
	pt3dadd(447.524, 553.696, 106.486, 2.06435)
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  }
}
proc shape3d_86() {
  filament_100000042[167] {	pt3dadd(398.398, 657.801, 129.193, 1.07795)
	pt3dadd(398.203, 657.331, 129.316, 0.942025)
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  }
}
proc shape3d_87() {
  filament_100000042[167] {	pt3dadd(339.382, 576.616, 136.289, 0.686826)
	pt3dadd(339.115, 576.175, 136.298, 0.742588)
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  }
}
proc shape3d_88() {
  filament_100000042[169] {	pt3dadd(546.946, 620.174, 95.627, 1.20525)
	pt3dadd(547.094, 619.719, 95.4236, 1.29957)
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  }
}
proc shape3d_89() {
  filament_100000042[169] {	pt3dadd(571.624, 525.844, 82.6682, 1.13782)
	pt3dadd(571.496, 525.363, 82.5597, 1.2122)
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  }
}
proc shape3d_90() {
  filament_100000042[169] {	pt3dadd(572.731, 426.388, 74.7831, 1.60974)
	pt3dadd(572.826, 425.905, 74.5513, 1.63577)
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  }
}
proc shape3d_91() {
  filament_100000042[169] {	pt3dadd(566.131, 328.82, 68.1274, 1.53524)
	pt3dadd(566.2, 328.329, 68.1089, 1.69448)
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  }
}
proc shape3d_92() {
  filament_100000042[170] {	pt3dadd(532.971, 668.801, 97.8468, 1.64452)
	pt3dadd(532.883, 668.226, 97.592, 1.54619)
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  }
}
proc shape3d_93() {
  filament_100000042[172] {	pt3dadd(440.812, 508.471, 103.637, 1.62695)
	pt3dadd(441.101, 508.034, 103.525, 1.61424)
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  }
}
proc shape3d_94() {
  filament_100000042[172] {	pt3dadd(436.261, 409.369, 94.5036, 1.75668)
	pt3dadd(436.234, 408.824, 94.4277, 1.57687)
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  }
}
proc shape3d_95() {
  filament_100000042[172] {	pt3dadd(430.529, 310.009, 87.9352, 1.56685)
	pt3dadd(430.433, 309.507, 87.9012, 1.44791)
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  }
}
proc shape3d_96() {
  filament_100000042[178] {	pt3dadd(558.988, 186.358, 57.3044, 1.39167)
	pt3dadd(558.981, 185.849, 57.2352, 1.62226)
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  }
}
proc shape3d_97() {
  filament_100000042[181] {	pt3dadd(416.489, 396.839, 97.5291, 1.55297)
	pt3dadd(416.542, 396.29, 97.4926, 1.26511)
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  }
}
proc shape3d_98() {
  filament_100000042[181] {	pt3dadd(388.352, 301.507, 93.4031, 1.65012)
	pt3dadd(388.282, 301.037, 93.6107, 1.7917)
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  }
}
proc shape3d_99() {
  filament_100000042[181] {	pt3dadd(362.463, 205.246, 89.4807, 1.22651)
	pt3dadd(362.44, 204.726, 89.5392, 1.22787)
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  }
}
proc shape3d_100() {
  filament_100000042[182] {	pt3dadd(412.539, 392.706, 108.078, 1.15222)
	pt3dadd(412.405, 392.184, 108.079, 1.23285)
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  }
}
proc shape3d_101() {
  filament_100000042[183] {	pt3dadd(429.155, 282.882, 88.3731, 1.659)
	pt3dadd(429.018, 282.384, 88.3935, 1.86422)
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  }
}
proc shape3d_102() {
  filament_100000042[186] {	pt3dadd(405.714, 684.574, 115.299, 1.0597)
	pt3dadd(405.462, 684.144, 115.269, 1.1481)
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  }
}
proc shape3d_103() {
  filament_100000042[190] {	pt3dadd(432.598, 724.997, 119.79, 1.29524)
	pt3dadd(432.849, 725.471, 120.209, 1.25874)
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  }
}
proc shape3d_104() {
  filament_100000042[192] {	pt3dadd(554.292, 132.58, 57.4781, 1.24718)
	pt3dadd(554.252, 132.083, 57.4206, 1.23438)
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  }
}
proc shape3d_105() {
  filament_100000042[193] {	pt3dadd(314.174, 124.005, 78.4601, 1.14531)
	pt3dadd(313.992, 123.54, 78.4102, 1.08744)
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  }
}
proc shape3d_106() {
  filament_100000042[194] {	pt3dadd(343.404, 104.679, 76.9331, 1.28894)
	pt3dadd(343.574, 104.226, 76.83, 1.15561)
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  }
}
proc shape3d_107() {
  filament_100000042[195] {	pt3dadd(358.601, 226.724, 104.239, 1.39269)
	pt3dadd(358.329, 226.264, 104.217, 1.28576)
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  }
}
proc shape3d_108() {
  filament_100000042[195] {	pt3dadd(336.435, 129.281, 103.495, 1.40246)
	pt3dadd(336.381, 128.77, 103.431, 1.48084)
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  }
}
proc shape3d_109() {
  filament_100000042[197] {	pt3dadd(413.881, 192.432, 87.2373, 1.68736)
	pt3dadd(413.878, 191.917, 87.2342, 1.42995)
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  }
}
proc shape3d_110() {
  filament_100000042[197] {  }
  filament_100000042[198] {pt3dclear()
	pt3dadd(427.409, 259.654, 88.6385, 1.88186)
	pt3dadd(426.888, 259.617, 88.4802, 1.57935)
	pt3dadd(426.36, 259.538, 88.381, 1.17434)
  }
  filament_100000042[199] {pt3dclear()
	pt3dadd(375.79, 650.294, 118.121, 0.6275)
	pt3dadd(375.421, 650.159, 117.669, 0.792804)
	pt3dadd(375.184, 650.228, 117.023, 0.630465)
	pt3dadd(375.003, 650.43, 116.295, 0.5)
  }
  filament_100000042[200] {pt3dclear()
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  }
}
proc shape3d_111() {
  filament_100000042[203] {	pt3dadd(575.609, 122.239, 48.1676, 1.24614)
	pt3dadd(575.554, 121.734, 48.0111, 1.39606)
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  }
}
proc shape3d_112() {
  filament_100000042[205] {	pt3dadd(266.011, 586.509, 97.2701, 0.747072)
	pt3dadd(265.688, 586.084, 97.3069, 0.773211)
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  }
}
proc basic_shape() {
  shape3d_1()
  shape3d_2()
  shape3d_3()
  shape3d_4()
  shape3d_5()
  shape3d_6()
  shape3d_7()
  shape3d_8()
  shape3d_9()
  shape3d_10()
  shape3d_11()
  shape3d_12()
  shape3d_13()
  shape3d_14()
  shape3d_15()
  shape3d_16()
  shape3d_17()
  shape3d_18()
  shape3d_19()
  shape3d_20()
  shape3d_21()
  shape3d_22()
  shape3d_23()
  shape3d_24()
  shape3d_25()
  shape3d_26()
  shape3d_27()
  shape3d_28()
  shape3d_29()
  shape3d_30()
  shape3d_31()
  shape3d_32()
  shape3d_33()
  shape3d_34()
  shape3d_35()
  shape3d_36()
  shape3d_37()
  shape3d_38()
  shape3d_39()
  shape3d_40()
  shape3d_41()
  shape3d_42()
  shape3d_43()
  shape3d_44()
  shape3d_45()
  shape3d_46()
  shape3d_47()
  shape3d_48()
  shape3d_49()
  shape3d_50()
  shape3d_51()
  shape3d_52()
  shape3d_53()
  shape3d_54()
  shape3d_55()
  shape3d_56()
  shape3d_57()
  shape3d_58()
  shape3d_59()
  shape3d_60()
  shape3d_61()
  shape3d_62()
  shape3d_63()
  shape3d_64()
  shape3d_65()
  shape3d_66()
  shape3d_67()
  shape3d_68()
  shape3d_69()
  shape3d_70()
  shape3d_71()
  shape3d_72()
  shape3d_73()
  shape3d_74()
  shape3d_75()
  shape3d_76()
  shape3d_77()
  shape3d_78()
  shape3d_79()
  shape3d_80()
  shape3d_81()
  shape3d_82()
  shape3d_83()
  shape3d_84()
  shape3d_85()
  shape3d_86()
  shape3d_87()
  shape3d_88()
  shape3d_89()
  shape3d_90()
  shape3d_91()
  shape3d_92()
  shape3d_93()
  shape3d_94()
  shape3d_95()
  shape3d_96()
  shape3d_97()
  shape3d_98()
  shape3d_99()
  shape3d_100()
  basic_shape_1()
}
proc basic_shape_1() {
  shape3d_101()
  shape3d_102()
  shape3d_103()
  shape3d_104()
  shape3d_105()
  shape3d_106()
  shape3d_107()
  shape3d_108()
  shape3d_109()
  shape3d_110()
  shape3d_111()
  shape3d_112()
}
proc celldef() {
  topol()
  subsets()
  geom()
  biophys()
  geom_nseg()
}

create filament_100000042[211]

proc topol() { local i
  for i = 1, 2 connect filament_100000042[i](0), filament_100000042(1)
  for i = 3, 4 connect filament_100000042[i](0), filament_100000042[1](1)
  for i = 5, 6 connect filament_100000042[i](0), filament_100000042[2](1)
  for i = 7, 8 connect filament_100000042[i](0), filament_100000042[3](1)
  for i = 9, 10 connect filament_100000042[i](0), filament_100000042[4](1)
  for i = 11, 12 connect filament_100000042[i](0), filament_100000042[5](1)
  for i = 13, 14 connect filament_100000042[i](0), filament_100000042[6](1)
  for i = 15, 16 connect filament_100000042[i](0), filament_100000042[7](1)
  for i = 17, 18 connect filament_100000042[i](0), filament_100000042[9](1)
  for i = 19, 21 connect filament_100000042[i](0), filament_100000042[10](1)
  for i = 22, 23 connect filament_100000042[i](0), filament_100000042[11](1)
  for i = 24, 25 connect filament_100000042[i](0), filament_100000042[15](1)
  for i = 26, 27 connect filament_100000042[i](0), filament_100000042[16](1)
  for i = 28, 30 connect filament_100000042[i](0), filament_100000042[17](1)
  for i = 31, 32 connect filament_100000042[i](0), filament_100000042[18](1)
  for i = 33, 34 connect filament_100000042[i](0), filament_100000042[22](1)
  for i = 35, 36 connect filament_100000042[i](0), filament_100000042[23](1)
  for i = 37, 38 connect filament_100000042[i](0), filament_100000042[24](1)
  for i = 39, 40 connect filament_100000042[i](0), filament_100000042[25](1)
  for i = 41, 42 connect filament_100000042[i](0), filament_100000042[26](1)
  for i = 43, 44 connect filament_100000042[i](0), filament_100000042[27](1)
  for i = 45, 46 connect filament_100000042[i](0), filament_100000042[28](1)
  for i = 47, 48 connect filament_100000042[i](0), filament_100000042[29](1)
  for i = 49, 50 connect filament_100000042[i](0), filament_100000042[30](1)
  for i = 51, 52 connect filament_100000042[i](0), filament_100000042[31](1)
  for i = 53, 54 connect filament_100000042[i](0), filament_100000042[33](1)
  for i = 55, 56 connect filament_100000042[i](0), filament_100000042[34](1)
  for i = 57, 58 connect filament_100000042[i](0), filament_100000042[35](1)
  for i = 59, 60 connect filament_100000042[i](0), filament_100000042[37](1)
  for i = 61, 62 connect filament_100000042[i](0), filament_100000042[39](1)
  for i = 63, 64 connect filament_100000042[i](0), filament_100000042[40](1)
  for i = 65, 66 connect filament_100000042[i](0), filament_100000042[42](1)
  for i = 67, 68 connect filament_100000042[i](0), filament_100000042[45](1)
  for i = 69, 70 connect filament_100000042[i](0), filament_100000042[46](1)
  for i = 71, 72 connect filament_100000042[i](0), filament_100000042[47](1)
  for i = 73, 74 connect filament_100000042[i](0), filament_100000042[51](1)
  for i = 75, 76 connect filament_100000042[i](0), filament_100000042[52](1)
  for i = 77, 78 connect filament_100000042[i](0), filament_100000042[53](1)
  for i = 79, 80 connect filament_100000042[i](0), filament_100000042[54](1)
  for i = 81, 82 connect filament_100000042[i](0), filament_100000042[56](1)
  for i = 83, 84 connect filament_100000042[i](0), filament_100000042[57](1)
  for i = 85, 86 connect filament_100000042[i](0), filament_100000042[59](1)
  for i = 87, 88 connect filament_100000042[i](0), filament_100000042[60](1)
  for i = 89, 90 connect filament_100000042[i](0), filament_100000042[61](1)
  for i = 91, 92 connect filament_100000042[i](0), filament_100000042[64](1)
  for i = 93, 94 connect filament_100000042[i](0), filament_100000042[66](1)
  for i = 95, 96 connect filament_100000042[i](0), filament_100000042[67](1)
  for i = 97, 98 connect filament_100000042[i](0), filament_100000042[71](1)
  for i = 99, 100 connect filament_100000042[i](0), filament_100000042[73](1)
  for i = 101, 102 connect filament_100000042[i](0), filament_100000042[78](1)
  for i = 103, 104 connect filament_100000042[i](0), filament_100000042[80](1)
  for i = 105, 106 connect filament_100000042[i](0), filament_100000042[81](1)
  for i = 107, 108 connect filament_100000042[i](0), filament_100000042[82](1)
  for i = 109, 110 connect filament_100000042[i](0), filament_100000042[85](1)
  for i = 111, 112 connect filament_100000042[i](0), filament_100000042[86](1)
  for i = 113, 114 connect filament_100000042[i](0), filament_100000042[89](1)
  for i = 115, 116 connect filament_100000042[i](0), filament_100000042[96](1)
  for i = 117, 118 connect filament_100000042[i](0), filament_100000042[99](1)
  for i = 119, 120 connect filament_100000042[i](0), filament_100000042[107](1)
  for i = 121, 122 connect filament_100000042[i](0), filament_100000042[108](1)
  for i = 123, 124 connect filament_100000042[i](0), filament_100000042[109](1)
  for i = 125, 126 connect filament_100000042[i](0), filament_100000042[110](1)
  for i = 127, 128 connect filament_100000042[i](0), filament_100000042[113](1)
  for i = 129, 130 connect filament_100000042[i](0), filament_100000042[122](1)
  for i = 131, 132 connect filament_100000042[i](0), filament_100000042[123](1)
  for i = 133, 134 connect filament_100000042[i](0), filament_100000042[126](1)
  for i = 135, 136 connect filament_100000042[i](0), filament_100000042[127](1)
  for i = 137, 138 connect filament_100000042[i](0), filament_100000042[131](1)
  for i = 139, 140 connect filament_100000042[i](0), filament_100000042[132](1)
  for i = 141, 142 connect filament_100000042[i](0), filament_100000042[133](1)
  for i = 143, 144 connect filament_100000042[i](0), filament_100000042[137](1)
  for i = 145, 146 connect filament_100000042[i](0), filament_100000042[143](1)
  for i = 147, 148 connect filament_100000042[i](0), filament_100000042[144](1)
  for i = 149, 150 connect filament_100000042[i](0), filament_100000042[145](1)
  for i = 151, 152 connect filament_100000042[i](0), filament_100000042[146](1)
  for i = 153, 154 connect filament_100000042[i](0), filament_100000042[148](1)
  for i = 155, 156 connect filament_100000042[i](0), filament_100000042[149](1)
  for i = 157, 158 connect filament_100000042[i](0), filament_100000042[150](1)
  for i = 159, 160 connect filament_100000042[i](0), filament_100000042[151](1)
  for i = 161, 162 connect filament_100000042[i](0), filament_100000042[153](1)
  for i = 163, 164 connect filament_100000042[i](0), filament_100000042[155](1)
  for i = 165, 166 connect filament_100000042[i](0), filament_100000042[159](1)
  for i = 167, 168 connect filament_100000042[i](0), filament_100000042[160](1)
  for i = 169, 170 connect filament_100000042[i](0), filament_100000042[163](1)
  for i = 171, 172 connect filament_100000042[i](0), filament_100000042[164](1)
  for i = 173, 174 connect filament_100000042[i](0), filament_100000042[165](1)
  for i = 175, 176 connect filament_100000042[i](0), filament_100000042[166](1)
  for i = 177, 178 connect filament_100000042[i](0), filament_100000042[169](1)
  for i = 179, 180 connect filament_100000042[i](0), filament_100000042[170](1)
  for i = 181, 182 connect filament_100000042[i](0), filament_100000042[171](1)
  for i = 183, 184 connect filament_100000042[i](0), filament_100000042[172](1)
  for i = 185, 186 connect filament_100000042[i](0), filament_100000042[173](1)
  for i = 187, 188 connect filament_100000042[i](0), filament_100000042[174](1)
  for i = 189, 190 connect filament_100000042[i](0), filament_100000042[176](1)
  for i = 191, 192 connect filament_100000042[i](0), filament_100000042[178](1)
  for i = 193, 194 connect filament_100000042[i](0), filament_100000042[181](1)
  for i = 195, 196 connect filament_100000042[i](0), filament_100000042[182](1)
  for i = 197, 198 connect filament_100000042[i](0), filament_100000042[183](1)
  for i = 199, 200 connect filament_100000042[i](0), filament_100000042[185](1)
  for i = 201, 202 connect filament_100000042[i](0), filament_100000042[186](1)
  for i = 203, 204 connect filament_100000042[i](0), filament_100000042[191](1)
  for i = 205, 206 connect filament_100000042[i](0), filament_100000042[200](1)
  for i = 207, 208 connect filament_100000042[i](0), filament_100000042[205](1)
  for i = 209, 210 connect filament_100000042[i](0), filament_100000042[208](1)
  basic_shape()
}
proc shape3d_1() {
  filament_100000042 {pt3dclear()
	pt3dadd(552.703, 988.659, 129.291, 4.79842)
	pt3dadd(552.615, 988.24, 128.971, 5.52792)
  }
  filament_100000042[1] {pt3dclear()
	pt3dadd(552.615, 988.24, 128.971, 5.52792)
	pt3dadd(552.601, 987.718, 128.617, 6.05773)
  }
  filament_100000042[2] {pt3dclear()
	pt3dadd(552.615, 988.24, 128.971, 5.52792)
	pt3dadd(551.949, 988.519, 128.689, 6.04366)
  }
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  }
}
proc shape3d_2() {
  filament_100000042[12] {	pt3dadd(538.101, 991.523, 129.556, 0.5)
	pt3dadd(537.576, 991.544, 129.765, 0.504797)
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  }
}
proc shape3d_3() {
  filament_100000042[14] {	pt3dadd(552.731, 996.019, 128.159, 6.27135)
	pt3dadd(552.595, 996.519, 127.694, 6.37587)
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  }
}
proc shape3d_4() {
  filament_100000042[19] {	pt3dadd(552.457, 983.162, 125.165, 6.09618)
	pt3dadd(552.619, 982.635, 124.974, 5.08418)
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  }
}
proc shape3d_5() {
  filament_100000042[25] {	pt3dadd(573.779, 934.322, 125.667, 1.03783)
	pt3dadd(574.254, 934.33, 125.696, 1.04279)
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  }
}
proc shape3d_6() {
  filament_100000042[27] {	pt3dadd(448.539, 918.708, 137.067, 1.07791)
	pt3dadd(448.104, 918.455, 137.129, 1.20276)
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  }
}
proc shape3d_7() {
  filament_100000042[30] {	pt3dadd(586.029, 1013.88, 109.042, 1.02674)
	pt3dadd(585.938, 1014.41, 108.857, 0.950913)
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  }
}
proc shape3d_8() {
  filament_100000042[35] {	pt3dadd(497.78, 1009.56, 124.038, 1.42449)
	pt3dadd(497.252, 1009.52, 124.017, 1.20916)
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  }
}
proc shape3d_9() {
  filament_100000042[36] {	pt3dadd(451.706, 1087.8, 135.987, 0.715699)
	pt3dadd(451.611, 1088.31, 136.116, 0.604159)
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  }
}
proc shape3d_10() {
  filament_100000042[39] {	pt3dadd(659.21, 917.215, 128.24, 1.61857)
	pt3dadd(659.706, 917.082, 128.295, 1.80899)
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  }
}
proc shape3d_11() {
  filament_100000042[45] {	pt3dadd(655.424, 1135.5, 97.2914, 1.38577)
	pt3dadd(655.328, 1135.99, 97.1387, 1.39047)
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  }
}
proc shape3d_12() {
  filament_100000042[48] {	pt3dadd(588.749, 998.933, 105.584, 0.625637)
	pt3dadd(589.159, 998.565, 105.376, 0.841971)
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  }
}
proc shape3d_13() {
  filament_100000042[49] {	pt3dadd(608.407, 1065.11, 88.0505, 1.05921)
	pt3dadd(608.557, 1065.61, 88.0448, 0.877203)
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  }
}
proc shape3d_14() {
  filament_100000042[49] {	pt3dadd(627.22, 1156.44, 68.9328, 0.922763)
	pt3dadd(627.348, 1156.91, 68.7618, 1.0144)
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  }
}
proc shape3d_15() {
  filament_100000042[50] {	pt3dadd(589.468, 1032.63, 93.1939, 1.91774)
	pt3dadd(589.458, 1033.11, 92.83, 1.69781)
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  }
}
proc shape3d_16() {
  filament_100000042[50] {	pt3dadd(605.672, 1118.08, 41.2129, 1.07946)
	pt3dadd(605.78, 1118.62, 41.0327, 1.09465)
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  }
}
proc shape3d_17() {
  filament_100000042[52] {	pt3dadd(657.087, 1080.43, 126.937, 1.17706)
	pt3dadd(657.439, 1080.82, 126.859, 1.25918)
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  }
}
proc shape3d_18() {
  filament_100000042[55] {	pt3dadd(488.995, 983.604, 108.459, 1.12642)
	pt3dadd(488.484, 983.391, 108.379, 1.01867)
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  }
}
proc shape3d_19() {
  filament_100000042[55] {	pt3dadd(401.372, 936.183, 94.5484, 0.690601)
	pt3dadd(401.034, 935.794, 94.4233, 0.688122)
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  }
}
proc shape3d_20() {
  filament_100000042[55] {	pt3dadd(314.031, 886.886, 79.678, 1.28713)
	pt3dadd(313.713, 886.503, 79.7526, 1.31815)
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  }
}
proc shape3d_21() {
  filament_100000042[58] {	pt3dadd(448.449, 984.859, 124.225, 0.843248)
	pt3dadd(447.994, 984.65, 124.208, 0.887765)
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  }
}
proc shape3d_22() {
  filament_100000042[58] {	pt3dadd(373.071, 917.013, 120.287, 0.850925)
	pt3dadd(372.856, 916.537, 120.328, 0.934564)
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  }
}
proc shape3d_23() {
  filament_100000042[60] {	pt3dadd(548.721, 912.355, 124.38, 1.03331)
	pt3dadd(549.001, 912.065, 123.882, 1.396)
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  }
}
proc shape3d_24() {
  filament_100000042[62] {	pt3dadd(678.969, 884.09, 134.116, 1.37174)
	pt3dadd(679.303, 883.692, 134.23, 1.3498)
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  }
}
proc shape3d_25() {
  filament_100000042[65] {	pt3dadd(450.551, 895.372, 125.278, 0.615765)
	pt3dadd(450.12, 895.043, 125.276, 0.53554)
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  }
}
proc shape3d_26() {
  filament_100000042[65] {	pt3dadd(361.686, 852.622, 119.145, 0.910418)
	pt3dadd(361.177, 852.451, 119.108, 0.988167)
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  }
}
proc shape3d_27() {
  filament_100000042[65] {	pt3dadd(277.03, 799.275, 111.024, 0.725302)
	pt3dadd(276.532, 799.13, 110.98, 0.633676)
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  }
}
proc shape3d_28() {
  filament_100000042[69] {	pt3dadd(629.856, 1111.98, 80.2606, 0.5)
	pt3dadd(629.819, 1112.5, 80.27, 0.586491)
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  }
}
proc shape3d_29() {
  filament_100000042[69] {	pt3dadd(657.167, 1205.06, 72.5431, 1.08771)
	pt3dadd(657.583, 1205.43, 72.4684, 0.975953)
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  }
}
proc shape3d_30() {
  filament_100000042[70] {	pt3dadd(716.06, 1112.31, 59.1404, 0.963982)
	pt3dadd(716.559, 1112.38, 58.9331, 0.975994)
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  }
}
proc shape3d_31() {
  filament_100000042[72] {	pt3dadd(623.599, 1012.68, 115.505, 0.957656)
	pt3dadd(624.162, 1012.75, 115.393, 0.98397)
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  }
}
proc shape3d_32() {
  filament_100000042[72] {	pt3dadd(720.626, 1028.78, 115.304, 0.859866)
	pt3dadd(721.128, 1028.74, 115.3, 0.978105)
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  }
}
proc shape3d_33() {
  filament_100000042[72] {	pt3dadd(820.628, 1030.99, 114.249, 1.15113)
	pt3dadd(821.072, 1030.79, 114.281, 0.942497)
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  }
}
proc shape3d_34() {
  filament_100000042[73] {	pt3dadd(669.244, 1002.42, 122.628, 1.14342)
	pt3dadd(669.738, 1002.33, 122.613, 1.56352)
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  }
}
proc shape3d_35() {
  filament_100000042[74] {	pt3dadd(700.296, 1016.53, 98.6126, 0.945677)
	pt3dadd(700.803, 1016.41, 98.5537, 0.886285)
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  }
}
proc shape3d_36() {
  filament_100000042[74] {	pt3dadd(797.082, 1031.86, 82.2747, 0.669063)
	pt3dadd(797.543, 1032.07, 82.2453, 0.575905)
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  }
}
proc shape3d_37() {
  filament_100000042[75] {	pt3dadd(745.179, 1153.35, 125.364, 1.66955)
	pt3dadd(745.519, 1153.71, 125.251, 1.55813)
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  }
}
proc shape3d_38() {
  filament_100000042[75] {	pt3dadd(816.966, 1223.92, 120.415, 0.868377)
	pt3dadd(817.363, 1224.21, 120.458, 0.838675)
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  }
}
proc shape3d_39() {
  filament_100000042[77] {	pt3dadd(450.447, 1015.08, 104.378, 0.906953)
	pt3dadd(449.98, 1014.9, 104.387, 0.975732)
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  }
}
proc shape3d_40() {
  filament_100000042[77] {	pt3dadd(351.985, 1023.4, 92.9397, 0.995616)
	pt3dadd(351.53, 1023.53, 92.6851, 1.12109)
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  }
}
proc shape3d_41() {
  filament_100000042[77] {	pt3dadd(253.628, 1010.64, 83.0867, 0.82034)
	pt3dadd(253.172, 1010.58, 82.9364, 0.911208)
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  }
}
proc shape3d_42() {
  filament_100000042[78] {	pt3dadd(436.345, 1074.21, 98.1746, 0.854241)
	pt3dadd(435.851, 1074.36, 98.2089, 1.06323)
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  }
}
proc shape3d_43() {
  filament_100000042[81] {	pt3dadd(510.207, 1008.96, 104.748, 2.11582)
	pt3dadd(509.997, 1009.3, 104.381, 1.83157)
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  }
}
proc shape3d_44() {
  filament_100000042[83] {	pt3dadd(418.789, 1027.77, 117.126, 0.950946)
	pt3dadd(418.298, 1027.78, 117.228, 0.95543)
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  }
}
proc shape3d_45() {
  filament_100000042[83] {	pt3dadd(318.745, 1029.04, 117.005, 1.01037)
	pt3dadd(318.269, 1028.96, 116.933, 0.978662)
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  }
}
proc shape3d_46() {
  filament_100000042[83] {	pt3dadd(219.189, 1040.64, 113.419, 0.964482)
	pt3dadd(218.693, 1040.81, 113.466, 0.907901)
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  }
}
proc shape3d_47() {
  filament_100000042[86] {	pt3dadd(494.528, 852.035, 133.401, 1.15613)
	pt3dadd(494.092, 851.755, 133.444, 1.13785)
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  }
}
proc shape3d_48() {
  filament_100000042[87] {	pt3dadd(662.345, 831.38, 75.4712, 1.04177)
	pt3dadd(662.826, 831.226, 75.4948, 1.01785)
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  }
}
proc shape3d_49() {
  filament_100000042[88] {	pt3dadd(618.57, 844.245, 76.5689, 1.26958)
	pt3dadd(618.719, 843.73, 76.4881, 1.02799)
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  }
}
proc shape3d_50() {
  filament_100000042[89] {	pt3dadd(705.733, 892.704, 129.083, 0.857776)
	pt3dadd(706.256, 892.691, 129.031, 0.849496)
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  }
}
proc shape3d_51() {
  filament_100000042[95] {	pt3dadd(672.808, 1169.36, 90.0482, 1.4132)
	pt3dadd(672.977, 1169.88, 89.9928, 1.27094)
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  }
}
proc shape3d_52() {
  filament_100000042[95] {	pt3dadd(726.939, 1253.72, 83.2487, 0.889646)
	pt3dadd(727.081, 1254.21, 83.2956, 0.848996)
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  }
}
proc shape3d_53() {
  filament_100000042[97] {	pt3dadd(654.15, 1045.62, 101.398, 0.831055)
	pt3dadd(654.546, 1046, 101.311, 0.866381)
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  }
}
proc shape3d_54() {
  filament_100000042[97] {	pt3dadd(728.658, 1112.81, 99.2529, 1.26417)
	pt3dadd(729.071, 1113.09, 99.2191, 1.25646)
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  }
}
proc shape3d_55() {
  filament_100000042[97] {	pt3dadd(809.698, 1173.82, 91.3827, 0.840937)
	pt3dadd(810.133, 1174.09, 91.3697, 0.806146)
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  }
}
proc shape3d_56() {
  filament_100000042[98] {	pt3dadd(690.057, 1073.03, 81.4384, 1.16721)
	pt3dadd(690.336, 1073.4, 81.1302, 1.51538)
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  }
}
proc shape3d_57() {
  filament_100000042[98] {	pt3dadd(776.164, 1108.32, 45.8014, 0.5)
	pt3dadd(776.497, 1107.98, 45.8822, 0.5)
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  }
}
proc shape3d_58() {
  filament_100000042[99] {	pt3dadd(777.734, 981.543, 118.88, 1.04511)
	pt3dadd(778.218, 981.478, 119.154, 0.965254)
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  }
}
proc shape3d_59() {
  filament_100000042[99] {	pt3dadd(879.052, 985.389, 119.227, 0.779103)
	pt3dadd(879.547, 985.544, 119.147, 0.850205)
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  }
}
proc shape3d_60() {
  filament_100000042[100] {	pt3dadd(776.284, 982.098, 135.171, 0.938232)
	pt3dadd(776.721, 981.677, 135.29, 1.1502)
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  }
}
proc shape3d_61() {
  filament_100000042[104] {	pt3dadd(574.524, 1041.2, 81.9607, 1.3289)
	pt3dadd(575.008, 1041.33, 81.6221, 1.46383)
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  }
}
proc shape3d_62() {
  filament_100000042[105] {	pt3dadd(468.955, 1095.91, 50.8045, 0.613529)
	pt3dadd(468.863, 1096.38, 50.5673, 0.84132)
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  }
}
proc shape3d_63() {
  filament_100000042[107] {	pt3dadd(528.461, 1010.12, 85.2028, 1.73634)
	pt3dadd(528.805, 1010.33, 84.7721, 1.3596)
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  }
}
proc shape3d_64() {
  filament_100000042[109] {	pt3dadd(526.995, 871.382, 125.932, 2.05736)
	pt3dadd(526.757, 870.931, 125.82, 2.1184)
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  }
}
proc shape3d_65() {
  filament_100000042[113] {	pt3dadd(767.51, 880.979, 132.765, 0.697993)
	pt3dadd(768.023, 880.84, 132.763, 0.851772)
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  }
}
proc shape3d_66() {
  filament_100000042[118] {	pt3dadd(890.489, 989.077, 118.153, 0.859328)
	pt3dadd(890.949, 989.307, 118.021, 0.959315)
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  }
}
proc shape3d_67() {
  filament_100000042[122] {	pt3dadd(620.648, 1049.32, 41.2456, 0.718793)
	pt3dadd(621.146, 1049.56, 41.1194, 0.649839)
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  }
}
proc shape3d_68() {
  filament_100000042[124] {	pt3dadd(587.663, 821.654, 118.515, 1.28446)
	pt3dadd(588.105, 821.398, 118.478, 1.32542)
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  }
}
proc shape3d_69() {
  filament_100000042[124] {	pt3dadd(659.131, 757.045, 117.841, 1.08817)
	pt3dadd(659.547, 756.724, 117.764, 0.908164)
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  }
}
proc shape3d_70() {
  filament_100000042[127] {	pt3dadd(810.31, 850.326, 135.554, 1.19901)
	pt3dadd(810.731, 850.02, 135.593, 1.10577)
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  }
}
proc shape3d_71() {
  filament_100000042[132] {	pt3dadd(499.881, 827.142, 95.9194, 2.55252)
	pt3dadd(499.88, 826.8, 95.3831, 2.72597)
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  }
}
proc shape3d_72() {
  filament_100000042[133] {	pt3dadd(583.67, 787.863, 132.943, 1.33484)
	pt3dadd(583.944, 787.424, 132.879, 0.914745)
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  }
}
proc shape3d_73() {
  filament_100000042[135] {	pt3dadd(814.239, 848.265, 135.439, 0.955903)
	pt3dadd(814.448, 848.219, 134.686, 1.01753)
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  }
}
proc shape3d_74() {
  filament_100000042[138] {	pt3dadd(473.613, 766.484, 126.045, 1.0664)
	pt3dadd(473.202, 766.169, 126.022, 1.07663)
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  }
}
proc shape3d_75() {
  filament_100000042[140] {	pt3dadd(446.289, 774.198, 65.9124, 0.992911)
	pt3dadd(446.218, 773.798, 65.8143, 1.1818)
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  }
}
proc shape3d_76() {
  filament_100000042[144] {	pt3dadd(482.586, 767.476, 107.75, 1.01243)
	pt3dadd(482.358, 767.022, 107.539, 1.16773)
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  }
}
proc shape3d_77() {
  filament_100000042[146] {	pt3dadd(473.189, 721.303, 121.537, 2.08502)
	pt3dadd(472.84, 720.962, 121.741, 1.99634)
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  }
}
proc shape3d_78() {
  filament_100000042[150] {	pt3dadd(548.607, 722.758, 118.364, 1.23846)
	pt3dadd(548.869, 722.293, 118.383, 1.59191)
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  }
}
proc shape3d_79() {
  filament_100000042[153] {	pt3dadd(452.501, 685.6, 83.7303, 0.895374)
	pt3dadd(452.546, 685.122, 83.5305, 1.19643)
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  }
}
proc shape3d_80() {
  filament_100000042[157] {	pt3dadd(592.049, 708.82, 121.67, 0.961438)
	pt3dadd(592.416, 708.386, 121.654, 1.10787)
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  }
}
proc shape3d_81() {
  filament_100000042[157] {	pt3dadd(676.147, 659.048, 125.12, 0.906646)
	pt3dadd(676.528, 658.7, 125.103, 1.16938)
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  }
}
proc shape3d_82() {
  filament_100000042[160] {	pt3dadd(443.2, 694.134, 124.184, 1.02683)
	pt3dadd(442.792, 693.82, 124.207, 1.15321)
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  }
}
proc shape3d_83() {
  filament_100000042[163] {	pt3dadd(527.855, 682.124, 103.151, 1.85127)
	pt3dadd(528.114, 681.68, 103.157, 1.66385)
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  }
}
proc shape3d_84() {
  filament_100000042[164] {	pt3dadd(464.991, 654.336, 112.089, 2.22442)
	pt3dadd(464.806, 653.852, 112.041, 2.22657)
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  }
}
proc shape3d_85() {
  filament_100000042[164] {	pt3dadd(447.799, 554.188, 106.522, 1.96232)
	pt3dadd(447.524, 553.696, 106.486, 2.06435)
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  }
}
proc shape3d_86() {
  filament_100000042[167] {	pt3dadd(398.398, 657.801, 129.193, 1.07795)
	pt3dadd(398.203, 657.331, 129.316, 0.942025)
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  }
}
proc shape3d_87() {
  filament_100000042[167] {	pt3dadd(339.382, 576.616, 136.289, 0.686826)
	pt3dadd(339.115, 576.175, 136.298, 0.742588)
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  }
}
proc shape3d_88() {
  filament_100000042[169] {	pt3dadd(546.946, 620.174, 95.627, 1.20525)
	pt3dadd(547.094, 619.719, 95.4236, 1.29957)
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  }
}
proc shape3d_89() {
  filament_100000042[169] {	pt3dadd(571.624, 525.844, 82.6682, 1.13782)
	pt3dadd(571.496, 525.363, 82.5597, 1.2122)
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  }
}
proc shape3d_90() {
  filament_100000042[169] {	pt3dadd(572.731, 426.388, 74.7831, 1.60974)
	pt3dadd(572.826, 425.905, 74.5513, 1.63577)
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  }
}
proc shape3d_91() {
  filament_100000042[169] {	pt3dadd(566.131, 328.82, 68.1274, 1.53524)
	pt3dadd(566.2, 328.329, 68.1089, 1.69448)
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  }
}
proc shape3d_92() {
  filament_100000042[170] {	pt3dadd(532.971, 668.801, 97.8468, 1.64452)
	pt3dadd(532.883, 668.226, 97.592, 1.54619)
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  }
}
proc shape3d_93() {
  filament_100000042[172] {	pt3dadd(440.812, 508.471, 103.637, 1.62695)
	pt3dadd(441.101, 508.034, 103.525, 1.61424)
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  }
}
proc shape3d_94() {
  filament_100000042[172] {	pt3dadd(436.261, 409.369, 94.5036, 1.75668)
	pt3dadd(436.234, 408.824, 94.4277, 1.57687)
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  }
}
proc shape3d_95() {
  filament_100000042[172] {	pt3dadd(430.529, 310.009, 87.9352, 1.56685)
	pt3dadd(430.433, 309.507, 87.9012, 1.44791)
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  }
}
proc shape3d_96() {
  filament_100000042[178] {	pt3dadd(558.988, 186.358, 57.3044, 1.39167)
	pt3dadd(558.981, 185.849, 57.2352, 1.62226)
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  }
}
proc shape3d_97() {
  filament_100000042[181] {	pt3dadd(416.489, 396.839, 97.5291, 1.55297)
	pt3dadd(416.542, 396.29, 97.4926, 1.26511)
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  }
}
proc shape3d_98() {
  filament_100000042[181] {	pt3dadd(388.352, 301.507, 93.4031, 1.65012)
	pt3dadd(388.282, 301.037, 93.6107, 1.7917)
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  }
}
proc shape3d_99() {
  filament_100000042[181] {	pt3dadd(362.463, 205.246, 89.4807, 1.22651)
	pt3dadd(362.44, 204.726, 89.5392, 1.22787)
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  }
}
proc shape3d_100() {
  filament_100000042[182] {	pt3dadd(412.539, 392.706, 108.078, 1.15222)
	pt3dadd(412.405, 392.184, 108.079, 1.23285)
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  }
}
proc shape3d_101() {
  filament_100000042[183] {	pt3dadd(429.155, 282.882, 88.3731, 1.659)
	pt3dadd(429.018, 282.384, 88.3935, 1.86422)
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  }
}
proc shape3d_102() {
  filament_100000042[186] {	pt3dadd(405.714, 684.574, 115.299, 1.0597)
	pt3dadd(405.462, 684.144, 115.269, 1.1481)
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  }
}
proc shape3d_103() {
  filament_100000042[190] {	pt3dadd(432.598, 724.997, 119.79, 1.29524)
	pt3dadd(432.849, 725.471, 120.209, 1.25874)
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  }
}
proc shape3d_104() {
  filament_100000042[192] {	pt3dadd(554.292, 132.58, 57.4781, 1.24718)
	pt3dadd(554.252, 132.083, 57.4206, 1.23438)
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  }
}
proc shape3d_105() {
  filament_100000042[193] {	pt3dadd(314.174, 124.005, 78.4601, 1.14531)
	pt3dadd(313.992, 123.54, 78.4102, 1.08744)
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  }
}
proc shape3d_106() {
  filament_100000042[194] {	pt3dadd(343.404, 104.679, 76.9331, 1.28894)
	pt3dadd(343.574, 104.226, 76.83, 1.15561)
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  }
}
proc shape3d_107() {
  filament_100000042[195] {	pt3dadd(358.601, 226.724, 104.239, 1.39269)
	pt3dadd(358.329, 226.264, 104.217, 1.28576)
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  }
}
proc shape3d_108() {
  filament_100000042[195] {	pt3dadd(336.435, 129.281, 103.495, 1.40246)
	pt3dadd(336.381, 128.77, 103.431, 1.48084)
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  }
}
proc shape3d_109() {
  filament_100000042[197] {	pt3dadd(413.881, 192.432, 87.2373, 1.68736)
	pt3dadd(413.878, 191.917, 87.2342, 1.42995)
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  }
}
proc shape3d_110() {
  filament_100000042[197] {  }
  filament_100000042[198] {pt3dclear()
	pt3dadd(427.409, 259.654, 88.6385, 1.88186)
	pt3dadd(426.888, 259.617, 88.4802, 1.57935)
	pt3dadd(426.36, 259.538, 88.381, 1.17434)
  }
  filament_100000042[199] {pt3dclear()
	pt3dadd(375.79, 650.294, 118.121, 0.6275)
	pt3dadd(375.421, 650.159, 117.669, 0.792804)
	pt3dadd(375.184, 650.228, 117.023, 0.630465)
	pt3dadd(375.003, 650.43, 116.295, 0.5)
  }
  filament_100000042[200] {pt3dclear()
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  }
}
proc shape3d_111() {
  filament_100000042[203] {	pt3dadd(575.609, 122.239, 48.1676, 1.24614)
	pt3dadd(575.554, 121.734, 48.0111, 1.39606)
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  }
}
proc shape3d_112() {
  filament_100000042[205] {	pt3dadd(266.011, 586.509, 97.2701, 0.747072)
	pt3dadd(265.688, 586.084, 97.3069, 0.773211)
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  }
}
proc basic_shape() {
  shape3d_1()
  shape3d_2()
  shape3d_3()
  shape3d_4()
  shape3d_5()
  shape3d_6()
  shape3d_7()
  shape3d_8()
  shape3d_9()
  shape3d_10()
  shape3d_11()
  shape3d_12()
  shape3d_13()
  shape3d_14()
  shape3d_15()
  shape3d_16()
  shape3d_17()
  shape3d_18()
  shape3d_19()
  shape3d_20()
  shape3d_21()
  shape3d_22()
  shape3d_23()
  shape3d_24()
  shape3d_25()
  shape3d_26()
  shape3d_27()
  shape3d_28()
  shape3d_29()
  shape3d_30()
  shape3d_31()
  shape3d_32()
  shape3d_33()
  shape3d_34()
  shape3d_35()
  shape3d_36()
  shape3d_37()
  shape3d_38()
  shape3d_39()
  shape3d_40()
  shape3d_41()
  shape3d_42()
  shape3d_43()
  shape3d_44()
  shape3d_45()
  shape3d_46()
  shape3d_47()
  shape3d_48()
  shape3d_49()
  shape3d_50()
  shape3d_51()
  shape3d_52()
  shape3d_53()
  shape3d_54()
  shape3d_55()
  shape3d_56()
  shape3d_57()
  shape3d_58()
  shape3d_59()
  shape3d_60()
  shape3d_61()
  shape3d_62()
  shape3d_63()
  shape3d_64()
  shape3d_65()
  shape3d_66()
  shape3d_67()
  shape3d_68()
  shape3d_69()
  shape3d_70()
  shape3d_71()
  shape3d_72()
  shape3d_73()
  shape3d_74()
  shape3d_75()
  shape3d_76()
  shape3d_77()
  shape3d_78()
  shape3d_79()
  shape3d_80()
  shape3d_81()
  shape3d_82()
  shape3d_83()
  shape3d_84()
  shape3d_85()
  shape3d_86()
  shape3d_87()
  shape3d_88()
  shape3d_89()
  shape3d_90()
  shape3d_91()
  shape3d_92()
  shape3d_93()
  shape3d_94()
  shape3d_95()
  shape3d_96()
  shape3d_97()
  shape3d_98()
  shape3d_99()
  shape3d_100()
  basic_shape_1()
}
proc basic_shape_1() {
  shape3d_101()
  shape3d_102()
  shape3d_103()
  shape3d_104()
  shape3d_105()
  shape3d_106()
  shape3d_107()
  shape3d_108()
  shape3d_109()
  shape3d_110()
  shape3d_111()
  shape3d_112()
}

objref all, Soma, Axonal, Apical, Basilar
proc subsets() { local i
  objref all, Soma, Axonal, Apical, Basilar
  all = new SectionList()
    for i=0, 210 filament_100000042[i] all.append()

  Soma = new SectionList()
    for i=0, 6 filament_100000042[i] Soma.append()
    for i=9, 10 filament_100000042[i] Soma.append()
    filament_100000042[14] Soma.append()
    for i=18, 21 filament_100000042[i] Soma.append()
    filament_100000042[32] Soma.append()

  Axonal = new SectionList()
    filament_100000042[13] Axonal.append()

  Apical = new SectionList()
    filament_100000042[7] Apical.append()
    for i=15, 16 filament_100000042[i] Apical.append()
    for i=24, 27 filament_100000042[i] Apical.append()
    for i=37, 44 filament_100000042[i] Apical.append()
    for i=59, 66 filament_100000042[i] Apical.append()
    for i=85, 94 filament_100000042[i] Apical.append()
    for i=109, 114 filament_100000042[i] Apical.append()
    for i=123, 128 filament_100000042[i] Apical.append()
    for i=131, 210 filament_100000042[i] Apical.append()

  Basilar = new SectionList()
    filament_100000042[8] Basilar.append()
    for i=11, 12 filament_100000042[i] Basilar.append()
    filament_100000042[17] Basilar.append()
    for i=22, 23 filament_100000042[i] Basilar.append()
    for i=28, 31 filament_100000042[i] Basilar.append()
    for i=33, 36 filament_100000042[i] Basilar.append()
    for i=45, 58 filament_100000042[i] Basilar.append()
    for i=67, 84 filament_100000042[i] Basilar.append()
    for i=95, 108 filament_100000042[i] Basilar.append()
    for i=115, 122 filament_100000042[i] Basilar.append()
    for i=129, 130 filament_100000042[i] Basilar.append()

}

proc geom() {
	forall {
		nseg = 1
	}
	forsec Apical {
		nseg = 1
	}
}

proc geom_nseg() {
}

proc biophys() {
	print "Exponential distribution of h-channels"
	xopen("L5_params_exponential_shift.hoc")

	gIhbar_opt=PARAM_gIhbar
	shift_minf_opt=PARAM_shift_minf
	shift_mtau_opt=PARAM_shift_mtau
	gSKv3_1bar_opt=PARAM_gSKv3_1bar
	gK_Pstbar_opt=PARAM_gK_Pstbar
	gImbar_opt=PARAM_gImbar
	gSK_E2bar_opt=PARAM_gSK_E2bar
	gK_Tstbar_opt=PARAM_gK_Tstbar
	gCa_LVAstbar_opt=PARAM_gCa_LVAstbar
	gCa_HVAbar_opt=PARAM_gCa_HVAbar

	decay=PARAM_decay

	Ra_opt=PARAM_Ra
	cm_opt=PARAM_cm
	g_pas_opt=PARAM_g_pas
	e_pas_opt=PARAM_e_pas

	gNa_Et2_opt=PARAM_Nap_Et2
	gNaTa_t_soma_opt=PARAM_NaTa_t_soma
	gNaTa_t_apical_opt=PARAM_NaTa_t_apical


	filament_100000042[0] distance()

    	forall {
        	insert pas
        	cm = cm_opt
        	Ra = Ra_opt
        	g_pas = g_pas_opt
        	e_pas = -e_pas_opt
    	}

	forsec Soma {
		insert Ca_LVAst 
	  	insert Ca_HVA 
		insert SKv3_1
		insert K_Pst
		insert K_Tst
		insert SK_E2
		insert CaDynamics_E2
		// insert Im
		insert Ih_shift

		insert Nap_Et2 
	  	insert NaTa_t


  		gCa_LVAstbar_Ca_LVAst = gCa_LVAstbar_opt 
  		gCa_HVAbar_Ca_HVA = gCa_HVAbar_opt
		decay_CaDynamics_E2= 460.0
		gamma_CaDynamics_E2= 0.000501
		gSKv3_1bar_SKv3_1= gSKv3_1bar_opt
		gK_Pstbar_K_Pst= gK_Pstbar_opt
		gK_Tstbar_K_Tst= gK_Tstbar_opt
		gSK_E2bar_SK_E2= gSK_E2bar_opt
		// gImbar_Im= gImbar_opt
		gIhbar_Ih_shift= gIhbar_opt
		shift_minf_Ih_shift=shift_minf_opt
		shift_mtau_Ih_shift=shift_mtau_opt

		gNap_Et2bar_Nap_Et2= gNa_Et2_opt
		gNaTa_tbar_NaTa_t= gNaTa_t_soma_opt

		cm=1
	}

	forsec Apical { 
		insert Ca_LVAst 
	  	insert Ca_HVA 
		insert SKv3_1
		// insert K_Pst
		// insert K_Tst
		insert SK_E2
		insert CaDynamics_E2
		insert Im
		insert Ih_shift

  		insert NaTa_t 

		decay_CaDynamics_E2= 460.0
		gamma_CaDynamics_E2= 0.000501
		gSKv3_1bar_SKv3_1= gSKv3_1bar_opt
		// gK_Pstbar_K_Pst= gK_Pstbar_opt
		gSK_E2bar_SK_E2= gSK_E2bar_opt
		gImbar_Im= gImbar_opt
		
		// gIhbar_Ih= gIhbar_opt
		dist=distance(.5)
		// gIhbar_Ih=gIhbar_opt*exp(-1*dist/decay)
		gIhbar_Ih_shift=gIhbar_opt*(-0.8696+2.0870*exp(3.6161*(dist/decay)))
		shift_minf_Ih_shift=shift_minf_opt
		shift_mtau_Ih_shift=shift_mtau_opt

  		// gCa_LVAstbar_Ca_LVAst = gCa_LVAstbar_opt 
  		// gCa_HVAbar_Ca_HVA = gCa_HVAbar_opt
		//if (dist>685 && dist<885) {
		if (dist>360 && dist<600) {
  			gCa_LVAstbar_Ca_LVAst = 100*gCa_LVAstbar_opt 
  			gCa_HVAbar_Ca_HVA = 10*gCa_HVAbar_opt
		} else{
			gCa_LVAstbar_Ca_LVAst = gCa_LVAstbar_opt 
  			gCa_HVAbar_Ca_HVA = gCa_HVAbar_opt
		}

		gNaTa_tbar_NaTa_t=gNaTa_t_apical_opt
	}

	forsec Basilar {
		// insert Ca_LVAst 
	  	// insert Ca_HVA 
		// insert SKv3_1
		// insert K_Pst
		// insert K_Tst
		// insert SK_E2
		// insert CaDynamics_E2
		// insert Im
		insert Ih_shift

		// decay_CaDynamics_E2= 460.0
		// gamma_CaDynamics_E2= 0.000501
		// gSKv3_1bar_SKv3_1= gSKv3_1bar_opt
		// gK_Pstbar_K_Pst= gK_Pstbar_opt
		// gSK_E2bar_SK_E2= gSK_E2bar_opt
		// gImbar_Im= gImbar_opt
		gIhbar_Ih_shift= gIhbar_opt
		shift_minf_Ih_shift=shift_minf_opt
		shift_mtau_Ih_shift=shift_mtau_opt
	}

	/* 
	forsec Axonal {
		insert SKv3_1
		insert K_Pst
		insert SK_E2
		insert CaDynamics_E2
		insert Im
		insert Ih

		decay_CaDynamics_E2= 460.0
		gamma_CaDynamics_E2= 0.000501
		gSKv3_1bar_SKv3_1= gSKv3_1bar_opt
		gK_Pstbar_K_Pst= gK_Pstbar_opt
		gSK_E2bar_SK_E2= gSK_E2bar_opt
		gImbar_Im= gImbar_opt
		gIhbar_Ih= gIhbar_opt
	} 
	*/
}

proc biophys2() {
	print "Uniform distribution of h-channels"
	xopen("L5_params_uniform.hoc")

	gIhbar_opt=PARAM_gIhbar
	shift_minf_opt=PARAM_shift_minf
	shift_mtau_opt=PARAM_shift_mtau
	gSKv3_1bar_opt=PARAM_gSKv3_1bar
	gK_Pstbar_opt=PARAM_gK_Pstbar
	gImbar_opt=PARAM_gImbar
	gSK_E2bar_opt=PARAM_gSK_E2bar
	gK_Tstbar_opt=PARAM_gK_Tstbar
	gCa_LVAstbar_opt=PARAM_gCa_LVAstbar
	gCa_HVAbar_opt=PARAM_gCa_HVAbar

	decay=PARAM_decay

	Ra_opt=PARAM_Ra
	cm_opt=PARAM_cm
	g_pas_opt=PARAM_g_pas
	e_pas_opt=PARAM_e_pas

	gNa_Et2_opt=PARAM_Nap_Et2
	gNaTa_t_soma_opt=PARAM_NaTa_t_soma
	gNaTa_t_apical_opt=PARAM_NaTa_t_apical


	filament_100000042[0] distance()

    	forall {
        	insert pas
        	cm = cm_opt
        	Ra = Ra_opt
        	g_pas = g_pas_opt
        	e_pas = -e_pas_opt
    	}

	forsec Soma {
		insert Ca_LVAst 
	  	insert Ca_HVA 
		insert SKv3_1
		insert K_Pst
		insert K_Tst
		insert SK_E2
		insert CaDynamics_E2
		// insert Im
		insert Ih_shift

		insert Nap_Et2 
	  	insert NaTa_t


  		gCa_LVAstbar_Ca_LVAst = gCa_LVAstbar_opt 
  		gCa_HVAbar_Ca_HVA = gCa_HVAbar_opt
		decay_CaDynamics_E2= 460.0
		gamma_CaDynamics_E2= 0.000501
		gSKv3_1bar_SKv3_1= gSKv3_1bar_opt
		gK_Pstbar_K_Pst= gK_Pstbar_opt
		gK_Tstbar_K_Tst= gK_Tstbar_opt
		gSK_E2bar_SK_E2= gSK_E2bar_opt
		// gImbar_Im= gImbar_opt
		gIhbar_Ih_shift= gIhbar_opt
		shift_minf_Ih_shift=shift_minf_opt
		shift_mtau_Ih_shift=shift_mtau_opt
		

		gNap_Et2bar_Nap_Et2= gNa_Et2_opt
		gNaTa_tbar_NaTa_t= gNaTa_t_soma_opt

		cm=1
	}

	forsec Apical { 
		insert Ca_LVAst 
	  	insert Ca_HVA 
		insert SKv3_1
		// insert K_Pst
		// insert K_Tst
		insert SK_E2
		insert CaDynamics_E2
		insert Im
		insert Ih_shift

  		insert NaTa_t 

		decay_CaDynamics_E2= 460.0
		gamma_CaDynamics_E2= 0.000501
		gSKv3_1bar_SKv3_1= gSKv3_1bar_opt
		// gK_Pstbar_K_Pst= gK_Pstbar_opt
		gSK_E2bar_SK_E2= gSK_E2bar_opt
		gImbar_Im= gImbar_opt
		
		// gIhbar_Ih= gIhbar_opt
		dist=distance(.5)
		// gIhbar_Ih=gIhbar_opt*exp(-1*dist/decay)
		gIhbar_Ih_shift=gIhbar_opt*(-0.8696+2.0870*exp(3.6161*(dist/decay)))
		shift_minf_Ih_shift=shift_minf_opt
		shift_mtau_Ih_shift=shift_mtau_opt

  		// gCa_LVAstbar_Ca_LVAst = gCa_LVAstbar_opt 
  		// gCa_HVAbar_Ca_HVA = gCa_HVAbar_opt
		//if (dist>685 && dist<885) {
		if (dist>360 && dist<600) {
  			gCa_LVAstbar_Ca_LVAst = 100*gCa_LVAstbar_opt 
  			gCa_HVAbar_Ca_HVA = 10*gCa_HVAbar_opt
		} else{
			gCa_LVAstbar_Ca_LVAst = gCa_LVAstbar_opt 
  			gCa_HVAbar_Ca_HVA = gCa_HVAbar_opt
		}

		gNaTa_tbar_NaTa_t=gNaTa_t_apical_opt
	}

	forsec Basilar {
		// insert Ca_LVAst 
	  	// insert Ca_HVA 
		// insert SKv3_1
		// insert K_Pst
		// insert K_Tst
		// insert SK_E2
		// insert CaDynamics_E2
		// insert Im
		insert Ih_shift

		// decay_CaDynamics_E2= 460.0
		// gamma_CaDynamics_E2= 0.000501
		// gSKv3_1bar_SKv3_1= gSKv3_1bar_opt
		// gK_Pstbar_K_Pst= gK_Pstbar_opt
		// gSK_E2bar_SK_E2= gSK_E2bar_opt
		// gImbar_Im= gImbar_opt
		gIhbar_Ih_shift= gIhbar_opt
		shift_minf_Ih_shift=shift_minf_opt
		shift_mtau_Ih_shift=shift_mtau_opt
	}

	/* 
	forsec Axonal {
		insert SKv3_1
		insert K_Pst
		insert SK_E2
		insert CaDynamics_E2
		insert Im
		insert Ih

		decay_CaDynamics_E2= 460.0
		gamma_CaDynamics_E2= 0.000501
		gSKv3_1bar_SKv3_1= gSKv3_1bar_opt
		gK_Pstbar_K_Pst= gK_Pstbar_opt
		gSK_E2bar_SK_E2= gSK_E2bar_opt
		gImbar_Im= gImbar_opt
		gIhbar_Ih= gIhbar_opt
	} 
	*/
}

proc biophys3() {
	print "Decay distribution of h-channels"
	xopen("L5_params_decay.hoc")

	gIhbar_opt=PARAM_gIhbar
	shift_minf_opt=PARAM_shift_minf
	shift_mtau_opt=PARAM_shift_mtau
	gSKv3_1bar_opt=PARAM_gSKv3_1bar
	gK_Pstbar_opt=PARAM_gK_Pstbar
	gImbar_opt=PARAM_gImbar
	gSK_E2bar_opt=PARAM_gSK_E2bar
	gK_Tstbar_opt=PARAM_gK_Tstbar
	gCa_LVAstbar_opt=PARAM_gCa_LVAstbar
	gCa_HVAbar_opt=PARAM_gCa_HVAbar

	decay=PARAM_decay

	Ra_opt=PARAM_Ra
	cm_opt=PARAM_cm
	g_pas_opt=PARAM_g_pas
	e_pas_opt=PARAM_e_pas

	gNa_Et2_opt=PARAM_Nap_Et2
	gNaTa_t_soma_opt=PARAM_NaTa_t_soma
	gNaTa_t_apical_opt=PARAM_NaTa_t_apical


	filament_100000042[0] distance()

    	forall {
        	insert pas
        	cm = cm_opt
        	Ra = Ra_opt
        	g_pas = g_pas_opt
        	e_pas = -e_pas_opt
    	}

	forsec Soma {
		insert Ca_LVAst 
	  	insert Ca_HVA 
		insert SKv3_1
		insert K_Pst
		insert K_Tst
		insert SK_E2
		insert CaDynamics_E2
		// insert Im
		insert Ih_shift

		insert Nap_Et2 
	  	insert NaTa_t


  		gCa_LVAstbar_Ca_LVAst = gCa_LVAstbar_opt 
  		gCa_HVAbar_Ca_HVA = gCa_HVAbar_opt
		decay_CaDynamics_E2= 460.0
		gamma_CaDynamics_E2= 0.000501
		gSKv3_1bar_SKv3_1= gSKv3_1bar_opt
		gK_Pstbar_K_Pst= gK_Pstbar_opt
		gK_Tstbar_K_Tst= gK_Tstbar_opt
		gSK_E2bar_SK_E2= gSK_E2bar_opt
		// gImbar_Im= gImbar_opt
		gIhbar_Ih_shift= gIhbar_opt
		shift_minf_Ih_shift=shift_minf_opt
		shift_mtau_Ih_shift=shift_mtau_opt

		gNap_Et2bar_Nap_Et2= gNa_Et2_opt
		gNaTa_tbar_NaTa_t= gNaTa_t_soma_opt

		cm=1
	}

	forsec Apical { 
		insert Ca_LVAst 
	  	insert Ca_HVA 
		insert SKv3_1
		// insert K_Pst
		// insert K_Tst
		insert SK_E2
		insert CaDynamics_E2
		insert Im
		insert Ih_shift

  		insert NaTa_t 

		decay_CaDynamics_E2= 460.0
		gamma_CaDynamics_E2= 0.000501
		gSKv3_1bar_SKv3_1= gSKv3_1bar_opt
		// gK_Pstbar_K_Pst= gK_Pstbar_opt
		gSK_E2bar_SK_E2= gSK_E2bar_opt
		gImbar_Im= gImbar_opt
		
		// gIhbar_Ih= gIhbar_opt
		dist=distance(.5)
		// gIhbar_Ih=gIhbar_opt*exp(-1*dist/decay)
		gIhbar_Ih_shift=gIhbar_opt*(-0.8696+2.0870*exp(3.6161*(dist/decay)))
		shift_minf_Ih_shift=shift_minf_opt
		shift_mtau_Ih_shift=shift_mtau_opt

  		// gCa_LVAstbar_Ca_LVAst = gCa_LVAstbar_opt 
  		// gCa_HVAbar_Ca_HVA = gCa_HVAbar_opt
		//if (dist>685 && dist<885) {
		if (dist>360 && dist<600) {
  			gCa_LVAstbar_Ca_LVAst = 100*gCa_LVAstbar_opt 
  			gCa_HVAbar_Ca_HVA = 10*gCa_HVAbar_opt
		} else{
			gCa_LVAstbar_Ca_LVAst = gCa_LVAstbar_opt 
  			gCa_HVAbar_Ca_HVA = gCa_HVAbar_opt
		}

		gNaTa_tbar_NaTa_t=gNaTa_t_apical_opt
	}

	forsec Basilar {
		// insert Ca_LVAst 
	  	// insert Ca_HVA 
		// insert SKv3_1
		// insert K_Pst
		// insert K_Tst
		// insert SK_E2
		// insert CaDynamics_E2
		// insert Im
		insert Ih_shift

		// decay_CaDynamics_E2= 460.0
		// gamma_CaDynamics_E2= 0.000501
		// gSKv3_1bar_SKv3_1= gSKv3_1bar_opt
		// gK_Pstbar_K_Pst= gK_Pstbar_opt
		// gSK_E2bar_SK_E2= gSK_E2bar_opt
		// gImbar_Im= gImbar_opt
		gIhbar_Ih_shift= gIhbar_opt
		shift_minf_Ih_shift=shift_minf_opt
		shift_mtau_Ih_shift=shift_mtau_opt
	}

	/* 
	forsec Axonal {
		insert SKv3_1
		insert K_Pst
		insert SK_E2
		insert CaDynamics_E2
		insert Im
		insert Ih

		decay_CaDynamics_E2= 460.0
		gamma_CaDynamics_E2= 0.000501
		gSKv3_1bar_SKv3_1= gSKv3_1bar_opt
		gK_Pstbar_K_Pst= gK_Pstbar_opt
		gSK_E2bar_SK_E2= gSK_E2bar_opt
		gImbar_Im= gImbar_opt
		gIhbar_Ih= gIhbar_opt
	} 
	*/
}



access filament_100000042

celldef()
